PsychoPy2experiment version="2020.2.8"
Settings
  Data file delimiter = tab
  Experiment info = {'participant': '', 'session': '001', 'group': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\cues\\cue_green.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\cues\\cue_white.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order1.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order2.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order3.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order4.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order5.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order6.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order7.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_order8.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase1_practice.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order1.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order2.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order3.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order4.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order5.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order6.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order7.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_order8.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase2_practice.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order1.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order2.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order3.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order4.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order5.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order6.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order7.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_order8.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\phase3_practice.csv', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\abacus.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\airhorn.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\airpump.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\anvil.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\auger.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\avocadoslicer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\battery.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\beadingtool.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\beaker.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\benchdogs.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\bevelgauge.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\binoculars.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\blackboard.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\blender.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\blower.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\bolt.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\bottleopener.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\broom.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\bucket.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\burnisher.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\calculator.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\caliper.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\camera.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\campingstove.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\carabiner.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\carjack.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\carpetblower.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\cart.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\caulkinggun.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\chainsaw.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\chainwrench.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\cheesegrater.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\chisel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\circlecutter.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\circularsaw.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\clamp.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\clippers.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\coathanger.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\compass.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\computermouse.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\corkscrew.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\crank.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\crutches.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\curlingiron.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\cuttingboard.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\digitalcamera.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\dremel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\drill.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\drillbit.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\drillpress.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\ducttape.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\duffelbag.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\duster.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\edger.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\electricbreaker.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\electricdrill.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\electricpipethreader.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\electricsander.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\electricsewingmachine.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\engine.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\eraser.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\extensioncord.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\fan.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\faxmachine.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\fertilzerspread.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\file.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\fishingpole.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\fishtailchisel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\flashlight.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\floorbuffer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\foodprocessor.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\gardenhose.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\generator.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\gentssaw.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\glove.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\gong.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\grapplinghook.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\grill.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hairbrush.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hairdryer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hammer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\handdrill.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\handsander.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\headphones.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hedgeshears.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hoe.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\hourglass.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\iron.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\italiangardeningtool.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\jawsoflife.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\jumpercables.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\kettle.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\keys.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\ladder.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\ladel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\lantern.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\laptop.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\lawnmower.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\level.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\levelmount.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\lighterbic.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\loom.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\magnet.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\magnifyingglass.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\mallet.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\measuringcups.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\measuringdevice.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\measuringtape.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\mellonballer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\microscope.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\microwave.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\mixer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\monkeywrench.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\mop.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\nailgun.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\nails.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\oven.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\padlock.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\paintbrush.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\paintgun.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\paintroller.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pencil.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pencilsharpener.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pick.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pizzacutter.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\planer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pliers.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pliers2.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\plow.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\plunger.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pressuregauge.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\pruner.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\rake.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\razorblade.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\reflexhammer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\rollingpin.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\ropeandpulley.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\routerplane.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\ruler.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sander.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\saw.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sawblade.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\scale.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\scissors.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\scratchawl.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\screwdriver.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sewingmachine.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\shoehorn.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\shovel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sledgehammer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\smartphone.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\snowbrush.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\solderingtorch.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sparkplug.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sponge.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\spoon.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\spraybottle.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\sprinkler.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\squeegee.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\staplegun.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\stapler.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\stethoscope.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\stopwatch.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\stove.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\stroller.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\suctioncup.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tape.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\telephone.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\telescope.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\television.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\thermometer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tirespoon.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\toaster.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tongs.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\toolbox.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\transmissionwrench.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\treadmill.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\trowel.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tubeflaring.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tubingbender.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\tuner.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\typewriter.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\umbrella.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\vacuumcleaner.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\vegetablepeeler.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\viceclamp.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\vicegrips.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\videogamecontroller.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\walker.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\washboard.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\watch.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\wateringcan.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\weedeater.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\weldershammer.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\weldinghelmet.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\wheelbarrow.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\wheeldolly.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\whisk.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\whistle.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\windchime.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\woodchipper.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\tools\\workbench.jpg', 'C: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muli\\animals\\woodlouse.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\animals\\yak.jpg', 'C:\\Users\\bcleo\\Downloads\\attachments\\attachments\\stimuli\\animals\\zebra.jpg']
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.357,-0.357,-0.357]
  expName = RemTag
  exportHTML = on Save
  logging level = debug
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Routines
  Routine Memory_Test
  Routine Pre_Reward
    ImageComponent enc
      image [set every repeat] = $stim_name_enc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    PolygonComponent cross
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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    ImageComponent left
      image [set every repeat] = $stim_name_left
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    ImageComponent right
      image [set every repeat] = $stim_name_right
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    PolygonComponent isi
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.5
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    KeyboardComponent pre_reward_response
      allowedKeys = '1','2'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if ((pre_reward_trials.thisN === 0)) {
            prereward_total_corr = 0;
        }
        console.log(prereward_total_corr);
      End Experiment:
        thisExp.addData('prereward_total_corr', prereward_total_corr)
      End JS Experiment:
        psychoJS.experiment.addData('prereward_total_corr', prereward_total_corr);
      End JS Routine:
        if (pre_reward_response.corr) {
            num_correct += 1;
            prereward_total_corr += 1;
            console.log(prereward_total_corr);
            psychoJS.experiment.addData('prereward_total_corr', prereward_total_corr);

            console.log("correct");
        }
        console.log(pre_reward_response.keys);
        if (skip.corr) {
            num_correct += 1;
        }
      End Routine:
        if pre_reward_response.corr:
            num_correct += 1
            prereward_total_corr += 1
            thisExp.addData('prereward_total_corr', prereward_total_corr)

            print(prereward_total_corr)
            print('correct')
        print(pre_reward_response.keys)
        if skip.corr:
            num_correct += 1
    KeyboardComponent skip
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      storeCorrect = True
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    TextComponent text_13
      letterHeight = 0.025
      pos = (-0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (1)
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    TextComponent text_14
      letterHeight = 0.025
      pos = (0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (2)
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  Routine Reward
    ImageComponent enc2
      image [set every repeat] = $stim_name_enc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    PolygonComponent cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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    ImageComponent left2
      image [set every repeat] = $stim_name_left
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    ImageComponent right2
      image [set every repeat] = $stim_name_right
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    PolygonComponent isi_2
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 8.6
      stopVal [duration (s)] = 1.5
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    KeyboardComponent reward_response
      allowedKeys = '1','2'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      storeCorrect = True
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    ImageComponent reward_star
      image [set every repeat] = $corr_image
      interpolate = nearest
      opacity = 0
      size = (0.3, 0.3)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent reward_text
      letterHeight = 0.075
      pos = (0, 0.15)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.0
      text = Miss!
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        reward_text.text = "Miss!";
        reward_star.opacity = 0.0;
        correct = false;
        console.log("setting text to miss");
      Begin Routine:
        reward_text.text= "Miss!"
        reward_star.opacity = 0.0
        correct = False
        print('setting text to miss')
      Each Frame:
        print('frame')
        if reward_response.keys and not correct:
            print('keypress and no repeat')
            if int(reward_response.keys) == int(corr_resp):

                correct= True
                reward_text.text = "Hit! You Won!"

                reward_star.opacity = 1.0
                num_correct += 1
                reward_total_corr += 1

                if conditionedCat == stim_cat_enc:
                    conditioned_total_corr += 1
                else:
                    unconditioned_total_corr += 1
                thisExp.addData('reward_total_corr', reward_total_corr)
                thisExp.addData('conditioned_total_corr', conditioned_total_corr)
                thisExp.addData('unconditioned_total_corr', unconditioned_total_corr)

                print('correct: ' + str(num_correct))
      Each JS Frame:
        console.log("frame");
        if ((reward_response.keys && (! correct))) {
            console.log("keypress and no repeat");
            if ((Number.parseInt(reward_response.keys) === Number.parseInt(corr_resp))) {
                correct = true;
                reward_text.text = "Hit! You Won!";
                reward_star.opacity = 1.0;
                num_correct += 1;
                reward_total_corr += 1;
                if(conditionedCat === stim_cat_enc)
                    conditioned_total_corr += 1;
                else
                    unconditioned_total_corr += 1;
                psychoJS.experiment.addData('reward_total_corr', reward_total_corr);
                psychoJS.experiment.addData('conditioned_total_corr', conditioned_total_corr);
                psychoJS.experiment.addData('unconditioned_total_corr', unconditioned_total_corr);

                console.log(("correct: " + num_correct.toString()));
            }
        }
      End Experiment:
        thisExp.addData("reward_total_corr", reward_total_corr);
        thisExp.addData('conditioned_total_corr', conditioned_total_corr)
        thisExp.addData('unconditioned_total_corr', unconditioned_total_corr)
      End JS Experiment:
        psychoJS.experiment.addData("reward_total_corr", reward_total_corr);
        psychoJS.experiment.addData('conditioned_total_corr', conditioned_total_corr);
        psychoJS.experiment.addData('unconditioned_total_corr', unconditioned_total_corr);
      End JS Routine:
        if (skip2.corr) {
            num_correct += 1;
            reward_total_corr += 1;
        }
      End Routine:
        if skip2.corr:
            num_correct += 1
            reward_total_corr += 1
    KeyboardComponent skip2
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      storeCorrect = True
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    TextComponent text_17
      letterHeight = 0.025
      pos = (-0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (1)
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    TextComponent text_18
      letterHeight = 0.025
      pos = (0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (2)
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  Routine trash
    ImageComponent star
      image = stimuli/greenstar.png
      interpolate = nearest
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent hit
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Hit! You won:
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  Routine instructions
    TextComponent instructions_page
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will perform several tasks and complete several questionnaires.

        You will be paid X for participation, and you will have the opportunity to earn up to X based on your performance.

        This is a two-day experiment. The second part of the experiment will take place 24 hours from now. If you do not return in 24 hours, you will not receive any payment.

        Press the space bar to continue.
    KeyboardComponent instructions_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        num_correct = 0
        prereward_total_corr = 0
        reward_total_corr = 0
        conditioned_total_corr = 0
        unconditioned_total_corr = 0
        bonus = 0

        prereward_cond = 'phase1_order'+str(expInfo['group'])+'.csv'
        reward_cond = 'phase2_order' +str(expInfo['group'])+'.csv'
  Routine check_practice
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if not practice_failed:
            repeat_practice.finished = True
            print('finished')
            practice_failed = False
            num_correct = 0
        else:
            text_6.text = 'You must answer correctly on all practice trials to proceed. Restarting practice trials now. Press space bar to continue.'
            practice_failed = False
            num_correct = 0
    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice trials. As a reminder, your task is to indicate which of the two images is the target image, using the 1 and 2 keys.

        You will now begin the first phase of the experiment.

        Press space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_2
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin the first phase of the experiment.

        Press space bar to continue.
    KeyboardComponent instructions_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_re_ins
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see an image. After a 5-second delay, you will  then be shown two images, one of which will match the image you saw previously (TARGET), and one of which is new.

        Your task is to indicate within 600ms which image is the target image.

        Use the “1” key to indicate that the target is on the left, and use the “2” key to indicate that the target is on the right.

        Please try to respond as quickly and as accurately as possible.

        Press the space bar to continue.
    KeyboardComponent instructions_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reward_ins
    TextComponent instructions_page_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        In the next phase of the experiment, you will complete the same task that you did previously. This time, you will have the opportunity to earn a bonus by correct performance.

        On each trial, you will receive feedback after indicating which item is the target in the form of GREEN and WHITE stars.

        Performance of 90% or more on the GREEN star trials will result in a bonus of X.

        Performance of 90% or more on the WHITE star trials will result in a bonus of X. You will receive information about the total bonus you earned tomorrow, at the end of the experiment.

        As in the last phase, use the “1” key to indicate that the target is on the left, and use the “2” key to indicate that the target is on the right. Press the space bar to continue.
    KeyboardComponent instructions_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        pre_reward_accuracy = num_correct
        num_correct= 0
        print('now setting num_correct to 0')
      End Routine:
        num_correct = 0
    VariableComponent pre_reward_accuracy
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  Routine final
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        reward_accuracy  = num_correct
    VariableComponent reward_accuracy
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        bonus = 0
      Begin Routine:
        if conditioned_total_corr >= 27:
            bonus += 5
        if unconditioned_total_corr >= 27:
            bonus += 0.25
    TextComponent text_12
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have completed this part of the experiment.\n\nYou earned a bonus of \$" +str(bonus) + " based on your performance.\n\nDon't forget to return for the second day of the experiment tomorrow! You will only receive your bonus payment if you return for the second day of the experiment.\n\nPress spacebar to confirm."
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_practice_reward
  Routine practice_instructions_pre_reward
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with 4 practice trials. If you do not complete these trials accurately, you will have to begin the practice round again.

        Press the space bar to continue.
    KeyboardComponent instruction_continue_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions_reward
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with 4 practice trials. If you do not complete these trials accurately, you will have to begin the practice round again.

        Press the space bar to continue.
    KeyboardComponent instruction_continue_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    VariableComponent correct
      startRoutineValue = False
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        practice_count = 0
  Routine check_reward_practice
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if not practice_failed:
            repeat_reward_practice.finished = True
            print('finished')
            practice_failed = False
            num_correct = 0
        else:
            text_7.text = 'You must answer correctly on all practice trials to proceed. Restarting practice trials now. As a reminder, your task is to indicate which of the two images is the target image, using the 1 and 2 keys. Press space bar to continue.'
            num_correct = 0
            practice_failed = False
    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice trials. As a reminder, your task is to indicate which of the two images is the target image, using the 1 and 2 keys.

        You will now begin the first phase of the experiment.

        Press space bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine continue_3
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin the second phase of the experiment.

        Press space bar to continue.
    KeyboardComponent instruction_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine script
    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        if corr_resp == 1:
            stim_name_enc = stim_name_left
        else:
            stim_name_enc = stim_name_right

        print(stim_name_enc)

        if conditionedCat == stim_cat_enc:
            star_name = 'stimuli/greenstar.jpg'
        else:
            star_name = 'stimuli/whitestar.jpg'
  Routine Reward_Practice
    ImageComponent enc2_2
      image [set every repeat] = $stim_name_enc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    PolygonComponent cross_3
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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    ImageComponent left2_2
      image [set every repeat] = $stim_name_left
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    ImageComponent right2_2
      image [set every repeat] = $stim_name_right
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    PolygonComponent isi_3
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 8.6
      stopVal [duration (s)] = 1.5
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    KeyboardComponent reward_response_2
      allowedKeys = '1','2'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      storeCorrect = True
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    ImageComponent reward_star_2
      image [set every repeat] = $corr_image
      interpolate = nearest
      opacity = 0
      size = (0.3, 0.3)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent reward_text_2
      letterHeight = 0.075
      pos = (0, 0.15)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.0
      text = Miss!
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        reward_text_2.text= "Miss!"
        reward_star_2.opacity = 0.0
        correct = False
        print('setting text to miss')
        practice_count = reward_practice.thisN + 1
      Each Frame:
        print('frame')
        if reward_response_2.keys and not correct:
            print('keypress and no repeat')
            if int(reward_response_2.keys) == int(corr_resp):

                correct= True
                reward_text_2.text = "Hit! You Won!"

                reward_star_2.opacity = 1.0
                num_correct += 1
                print('correct: ' + str(num_correct))
      End Routine:
        if skip2_2.corr:
            num_correct += 1
        elif reward_response_2.corr:
            print('null')
        else:
            practice_failed = True
            reward_practice.finished = True
    KeyboardComponent skip2_2
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      storeCorrect = True
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    TextComponent text_11
      letterHeight = 0.025
      pos = (-.75,.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.6
      text [set every repeat] = $"Practice trial #"+str(practice_count)+"/4"
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    TextComponent text_15
      letterHeight = 0.025
      pos = (-0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (1)
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    TextComponent text_16
      letterHeight = 0.025
      pos = (0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (2)
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  Routine Pre_Reward_Practice
    ImageComponent enc_2
      image [set every repeat] = $stim_name_enc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    PolygonComponent cross_4
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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    ImageComponent left_2
      image [set every repeat] = $stim_name_left
      pos = (-0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    ImageComponent right_2
      image [set every repeat] = $stim_name_right
      pos = (0.35, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    PolygonComponent isi_4
      fillColor = $[1,1,1]
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 7.6
      stopVal [duration (s)] = 1.5
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    KeyboardComponent pre_reward_response_2
      allowedKeys = '1','2'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 0.6
      storeCorrect = True
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        practice_count = 0
        practice_failed = False
      Begin Routine:
        practice_count = practice.thisN + 1
      End Routine:
        if pre_reward_response_2.corr:
            num_correct += 1
            print('correct')
        elif skip_2.corr:
            num_correct += 1
        else:
            practice_failed = True
            practice.finished = True
    KeyboardComponent skip_2
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
      storeCorrect = True
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    TextComponent text_8
      letterHeight = 0.025
      pos = (-0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (1)
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    TextComponent text_9
      letterHeight = 0.025
      pos = (0.35, -0.3)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.6
      text = (2)
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    TextComponent text_10
      letterHeight = 0.025
      pos = (-.75,.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.6
      text [set every repeat] = $"Practice trial #"+str(practice_count)+"/4"
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  Routine practice_restart
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if not practice_failed:
            continueRoutine = False
      End Routine:
        if practice_failed:
            practice.finished = True
  Routine get_bonus
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if conditioned_total_corr >= 27:
            bonus += 5
        if unconditioned_total_corr >= 27:
            bonus += 0.25
Flow
  Routine instructions
  Routine pre_re_ins
  Routine practice_instructions_pre_reward
  LoopInitiator repeat_practice loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = phase1_practice.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('order', 'practice'), ('conditionedCat', None), ('trial', 1), ('stim_cat_enc', 2), ('stim_number_enc', 11), ('stim_cat_left', 2), ('stim_number_left', 11), ('stim_name_left', 'stimuli_practice/natural/soil.jpg'), ('stim_cat_right', 2), ('stim_number_right', 12), ('stim_name_right', 'stimuli_practice/natural/starfish01.jpg'), ('corr_cat', 2), ('corr_resp', 1)]),
        OrderedDict([('order', 'practice'), ('conditionedCat', None), ('trial', 2), ('stim_cat_enc', 1), ('stim_number_enc', 1), ('stim_cat_left', 1), ('stim_number_left', 1), ('stim_name_left', 'stimuli_practice/manmade/baseball01a.jpg'), ('stim_cat_right', 1), ('stim_number_right', 4), ('stim_name_right', 'stimuli_practice/manmade/mousetrap.jpg'), ('corr_cat', 1), ('corr_resp', 1)]),
        OrderedDict([('order', 'practice'), ('conditionedCat', None), ('trial', 3), ('stim_cat_enc', 1), ('stim_number_enc', 5), ('stim_cat_left', 1), ('stim_number_left', 6), ('stim_name_left', 'stimuli_practice/manmade/plasticgallon.jpg'), ('stim_cat_right', 1), ('stim_number_right', 5), ('stim_name_right', 'stimuli_practice/manmade/pictureframe04.jpg'), ('corr_cat', 1), ('corr_resp', 2)]),
        OrderedDict([('order', 'practice'), ('conditionedCat', None), ('trial', 4), ('stim_cat_enc', 2), ('stim_number_enc', 8), ('stim_cat_left', 2), ('stim_number_left', 8), ('stim_name_left', 'stimuli_practice/natural/feather03a.jpg'), ('stim_cat_right', 2), ('stim_number_right', 10), ('stim_name_right', 'stimuli_practice/natural/rock01a.jpg'), ('corr_cat', 2), ('corr_resp', 1)])]
      Routine script
      Routine Pre_Reward_Practice
    LoopTerminator practice
    Routine check_practice
  LoopTerminator repeat_practice
  Routine continue_2
  LoopInitiator pre_reward_trials loopType="TrialHandler"
    conditionsFile = $prereward_cond
    loopType = sequential
    nReps = 1
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    Routine script
    Routine Pre_Reward
  LoopTerminator pre_reward_trials
  Routine reward_ins
  Routine practice_instructions_reward
  LoopInitiator repeat_reward_practice loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    LoopInitiator reward_practice loopType="TrialHandler"
      conditionsFile = phase2_practice.csv
      loopType = sequential
      nReps = 1
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      Routine script
      Routine Reward_Practice
    LoopTerminator reward_practice
    Routine check_reward_practice
  LoopTerminator repeat_reward_practice
  Routine continue_3
  LoopInitiator reward_trials loopType="TrialHandler"
    conditionsFile = $reward_cond
    loopType = sequential
    nReps = 1
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    Routine script
    Routine Reward
  LoopTerminator reward_trials
  Routine final
